<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SpinnakerCapture">
          <p1:Index>3</p1:Index>
          <p1:SerialNumber>23336442</p1:SerialNumber>
          <p1:ColorProcessing>NONE</p1:ColorProcessing>
          <p1:StreamBufferCount>64</p1:StreamBufferCount>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Both</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>D:\camera\cam4_.avi</cv:FileName>
            <cv:Suffix>Timestamp</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>250</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.ExposureEndLineStatusAll</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>D:\camera\cam4_.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SpinnakerCapture">
          <p1:Index>0</p1:Index>
          <p1:SerialNumber>23336444</p1:SerialNumber>
          <p1:ColorProcessing>NONE</p1:ColorProcessing>
          <p1:StreamBufferCount>64</p1:StreamBufferCount>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>D:\camera\cam1_.avi</cv:FileName>
            <cv:Suffix>Timestamp</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>250</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.ExposureEndLineStatusAll</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>D:\camera\cam1_.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SpinnakerCapture">
          <p1:Index>1</p1:Index>
          <p1:SerialNumber>24143771</p1:SerialNumber>
          <p1:ColorProcessing>NONE</p1:ColorProcessing>
          <p1:StreamBufferCount>64</p1:StreamBufferCount>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>D:\camera\cam2_.avi</cv:FileName>
            <cv:Suffix>Timestamp</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>250</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.ExposureEndLineStatusAll</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>D:\camera\cam2_.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SpinnakerCapture">
          <p1:Index>2</p1:Index>
          <p1:SerialNumber>24143772</p1:SerialNumber>
          <p1:ColorProcessing>NONE</p1:ColorProcessing>
          <p1:StreamBufferCount>64</p1:StreamBufferCount>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>D:\camera\cam3_.avi</cv:FileName>
            <cv:Suffix>Timestamp</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>250</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.ExposureEndLineStatusAll</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>D:\camera\cam3_.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="1" To="6" Label="Source1" />
      <Edge From="1" To="7" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="8" Label="Source2" />
      <Edge From="7" To="8" Label="Source3" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="11" To="15" Label="Source1" />
      <Edge From="11" To="16" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="17" Label="Source1" />
      <Edge From="15" To="17" Label="Source2" />
      <Edge From="16" To="17" Label="Source3" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="20" To="24" Label="Source1" />
      <Edge From="20" To="25" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="26" Label="Source1" />
      <Edge From="24" To="26" Label="Source2" />
      <Edge From="25" To="26" Label="Source3" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="29" To="32" Label="Source1" />
      <Edge From="29" To="33" Label="Source1" />
      <Edge From="29" To="34" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="35" Label="Source1" />
      <Edge From="33" To="35" Label="Source2" />
      <Edge From="34" To="35" Label="Source3" />
      <Edge From="35" To="36" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>