<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:pgr="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pgr:FlyCapture">
          <pgr:Index>0</pgr:Index>
          <pgr:ColorProcessing>Default</pgr:ColorProcessing>
          <pgr:NumBuffers>10</pgr:NumBuffers>
          <pgr:GrabMode>BufferFrames</pgr:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>C:\Users\Sabatini lab\Documents\Behavior_rig\camera\cam1_.avi</cv:FileName>
            <cv:Suffix>Timestamp</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>250</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Metadata.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Metadata.embeddedGPIOPinState</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\Sabatini lab\Documents\Behavior_rig\camera\cam1_.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="pgr:FlyCapture">
            <pgr:Index>1</pgr:Index>
            <pgr:ColorProcessing>Default</pgr:ColorProcessing>
            <pgr:NumBuffers>10</pgr:NumBuffers>
            <pgr:GrabMode>BufferFrames</pgr:GrabMode>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Value.Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>C:\Users\Sabatini lab\Documents\Behavior_rig\camera\cam2_.avi</cv:FileName>
            <cv:Suffix>Timestamp</cv:Suffix>
            <cv:Buffered>false</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>250</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Value.Metadata.embeddedFrameCounter</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Value.Metadata.embeddedTimeStamp</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Value.Metadata.embeddedGPIOPinState</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\Sabatini lab\Documents\Behavior_rig\camera\cam2_.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index>0</spk:Index>
          <spk:SerialNumber>23293208</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>C:\Users\Sabatini lab\Documents\Behavior_rig\camera\cam3_.avi</cv:FileName>
            <cv:Suffix>Timestamp</cv:Suffix>
            <cv:Buffered>false</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>250</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ChunkData.ExposureEndLineStatusAll</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\Sabatini lab\Documents\Behavior_rig\camera\cam3_.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="1" To="6" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="7" Label="Source2" />
      <Edge From="6" To="7" Label="Source3" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="10" To="14" Label="Source1" />
      <Edge From="10" To="15" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="16" Label="Source2" />
      <Edge From="15" To="16" Label="Source3" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="22" Label="Source1" />
      <Edge From="19" To="23" Label="Source1" />
      <Edge From="19" To="24" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="25" Label="Source1" />
      <Edge From="23" To="25" Label="Source2" />
      <Edge From="24" To="25" Label="Source3" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>